PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroop-task-experiment
  keyboardBackend = ioHub
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Routines
  Routine instructions
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Instructions:

        In this experiment, you will respond to the color of the text seen.

        Please respond as quickly as possible.

        Use 'b' for blue, 'r' for red, 'y' for yellow, and 'g' for green.

        When you are ready, press [spacebar] to continue.
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine trial
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    TextComponent Stimulus
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b','g','y'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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  Routine fixation
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    PolygonComponent fixationCross
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions\stroop_wordname.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [{'word': 'red', 'colour': 'red', 'congruent': 1, 'corrAns': 'r'},
      {'word': 'yellow', 'colour': 'yellow', 'congruent': 1, 'corrAns': 'y'},
      {'word': 'blue', 'colour': 'blue', 'congruent': 1, 'corrAns': 'b'},
      {'word': 'green', 'colour': 'green', 'congruent': 1, 'corrAns': 'g'},
      {'word': 'red', 'colour': 'yellow', 'congruent': 0, 'corrAns': 'y'},
      {'word': 'yellow', 'colour': 'blue', 'congruent': 0, 'corrAns': 'b'},
      {'word': 'blue', 'colour': 'green', 'congruent': 0, 'corrAns': 'g'},
      {'word': 'green', 'colour': 'red', 'congruent': 0, 'corrAns': 'r'},
      {'word': 'red', 'colour': 'blue', 'congruent': 0, 'corrAns': 'b'},
      {'word': 'yellow', 'colour': 'green', 'congruent': 0, 'corrAns': 'g'},
      {'word': 'blue', 'colour': 'red', 'congruent': 0, 'corrAns': 'r'},
      {'word': 'green', 'colour': 'yellow', 'congruent': 0, 'corrAns': 'y'},
      {'word': 'red', 'colour': 'green', 'congruent': 0, 'corrAns': 'g'},
      {'word': 'yellow', 'colour': 'red', 'congruent': 0, 'corrAns': 'r'},
      {'word': 'blue', 'colour': 'yellow', 'congruent': 0, 'corrAns': 'y'},
      {'word': 'green', 'colour': 'blue', 'congruent': 0, 'corrAns': 'b'}]
    Routine fixation
    Routine trial
  LoopTerminator trials
